<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.9.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:aeon="clr-namespace:Aeon.Acquisition;assembly=Aeon.Acquisition"
                 xmlns:dsp="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Description>Chunks and logs a timestamped harp data stream into the base data log, splitting each independent register into a separate file.</Description>
  <Workflow>
    <Nodes>
      <Expression xsi:type="WorkflowInput">
        <Name>Source1</Name>
      </Expression>
      <Expression xsi:type="rx:GroupBy">
        <rx:KeySelector>Address</rx:KeySelector>
        <rx:ElementSelector />
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="LogName" />
        <Property Name="Heartbeats" />
        <Property Name="ClosingDuration" />
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Name>LogRegisters</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>Register</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="LogName" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>HarpData</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Register</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Key</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Format">
              <Format>{0}_{1}</Format>
              <Selector>Item1,Item2</Selector>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>LogName</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Register</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Name" DisplayName="Heartbeats" Description="The source of heartbeat signals used as a timing signal for closing groups." Category="GroupClosing" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>ChunkSize</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="ChunkSize" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="ClosingDuration" Category="GroupClosing" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="aeon:GroupByTime">
                <aeon:ChunkSize>1</aeon:ChunkSize>
                <aeon:ClosingDuration>PT2S</aeon:ClosingDuration>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:DistinctBy">
              <rx:KeySelector>Key</rx:KeySelector>
            </Expression>
            <Expression xsi:type="rx:CreateObservable">
              <Name>LogHarp</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="rx:AsyncSubject">
                    <Name>Data</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Data</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Merge" />
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>MessageBytes</Selector>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Data</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Key</Selector>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>LogName</Name>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Name" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="Aeon.Acquisition:FormatFileName.bonsai">
                    <Name>HarpData</Name>
                    <Extension>bin</Extension>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Path" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="dsp:MatrixWriter">
                      <dsp:Suffix>None</dsp:Suffix>
                      <dsp:Overwrite>false</dsp:Overwrite>
                      <dsp:Layout>ColumnMajor</dsp:Layout>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="11" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="9" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="8" To="9" Label="Source2" />
                  <Edge From="9" To="10" Label="Source1" />
                  <Edge From="10" To="11" Label="Source2" />
                  <Edge From="11" To="12" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Switch" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="7" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source2" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="17" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="13" To="17" Label="Source2" />
            <Edge From="14" To="15" Label="Source1" />
            <Edge From="15" To="17" Label="Source3" />
            <Edge From="16" To="17" Label="Source4" />
            <Edge From="17" To="18" Label="Source1" />
            <Edge From="18" To="19" Label="Source1" />
            <Edge From="19" To="20" Label="Source1" />
            <Edge From="20" To="21" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="WorkflowOutput" />
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="3" Label="Source1" />
      <Edge From="2" To="3" Label="Source2" />
      <Edge From="3" To="4" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>