<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.8.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns:scr="clr-namespace:Bonsai.Scripting.Expressions;assembly=Bonsai.Scripting.Expressions"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:aeon="clr-namespace:Aeon.Acquisition;assembly=Aeon.Acquisition"
                 xmlns:aeon-env="clr-namespace:Aeon.Environment;assembly=Aeon.Environment"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Description>Implements a simple light cycle model where light levels are sampled using the current time of day.</Description>
  <Workflow>
    <Nodes>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="FileName" DisplayName="ConfigFileName" Description="The name of the CSV file describing the light model, where each row represents one whole minute and the red, cold white and warm white light levels to set for that minute." />
      </Expression>
      <Expression xsi:type="io:CsvReader">
        <io:FileName>lightcycle.config</io:FileName>
        <io:ScanPattern>%i,%i,%i,%i</io:ScanPattern>
        <io:SkipRows>1</io:SkipRows>
      </Expression>
      <Expression xsi:type="scr:ExpressionTransform">
        <scr:Expression>new(
Item1 as Minute,
Item2 as Red,
Item3 as ColdWhite,
Item4 as WarmWhite)</scr:Expression>
      </Expression>
      <Expression xsi:type="rx:ToDictionary">
        <rx:KeySelector>Minute</rx:KeySelector>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>SynchronizerEvents</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="aeon:GetDateTime" />
      </Expression>
      <Expression xsi:type="scr:ExpressionTransform">
        <scr:Expression>Hour * 60 + Minute</scr:Expression>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:CombineLatest" />
      </Expression>
      <Expression xsi:type="Index" />
      <Expression xsi:type="InputMapping">
        <PropertyMappings>
          <Property Name="ColdWhite" Selector="ColdWhite" />
          <Property Name="WarmWhite" Selector="WarmWhite" />
          <Property Name="Red" Selector="Red" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Name" DisplayName="RoomName" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="aeon-env:CreateRoomLightPreset">
          <aeon-env:ColdWhite>0</aeon-env:ColdWhite>
          <aeon-env:WarmWhite>0</aeon-env:WarmWhite>
          <aeon-env:Red>0</aeon-env:Red>
        </Combinator>
      </Expression>
      <Expression xsi:type="WorkflowOutput" />
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="3" To="7" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="7" Label="Source2" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="9" To="11" Label="Source1" />
      <Edge From="10" To="11" Label="Source2" />
      <Edge From="11" To="12" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>