<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.8.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:harp="clr-namespace:Bonsai.Harp;assembly=Bonsai.Harp"
                 xmlns:wie="clr-namespace:Bonsai.Windows.Input;assembly=Bonsai.Windows.Input"
                 xmlns:p1="clr-namespace:System.Windows.Forms;assembly=System.Windows.Forms, Version=4.0.0.0, Culture=neutral, PublicKeyToken=b77a5c561934e089"
                 xmlns:sys="clr-namespace:System;assembly=mscorlib"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Description>Provides a simulated feeder module for testing and debugging of task logic.</Description>
  <Workflow>
    <Nodes>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Name" DisplayName="PatchEvents" Description="The name of the output sequence containing all patch events." />
      </Expression>
      <Expression xsi:type="rx:PublishSubject" TypeArguments="harp:HarpMessage">
        <rx:Name>PatchEvents</rx:Name>
      </Expression>
      <Expression xsi:type="WorkflowOutput" />
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:MouseWheel" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:KeyDown">
          <wie:Filter>None</wie:Filter>
          <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
        </Combinator>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Value" DisplayName="ActivationKey" Description="Specifies the key combination that activates this feeder." />
      </Expression>
      <Expression xsi:type="Equal">
        <Operand xsi:type="WorkflowProperty" TypeArguments="p1:Keys">
          <Value>D1</Value>
        </Operand>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="Value" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="rx:Condition">
        <Name>Active</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>false</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="2" Label="Source1" />
            <Edge From="1" To="2" Label="Source2" />
            <Edge From="2" To="3" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Value" DisplayName="TickScale" />
      </Expression>
      <Expression xsi:type="Multiply">
        <Operand xsi:type="DoubleProperty">
          <Value>0.01</Value>
        </Operand>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Name" DisplayName="TriggerSource" Description="The trigger source used to sample the virtual feeder wheel." />
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>LocalTrigger</Name>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Seconds</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:BufferTrigger">
          <rx:Count xsi:nil="true" />
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Sum" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="harp:CreateTimestamped" />
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Name" DisplayName="WheelDisplacement" Description="The name of the output sequence carrying total distance travelled on the wheel." />
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>WheelDisplacement</Name>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Name" DisplayName="DeliverPellet" Description="The name of the input sequence used to trigger pellet delivery." />
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject" TypeArguments="sys:Object">
        <rx:Name>DeliverPellet</rx:Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="BooleanProperty">
          <Value>true</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timestamp" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="harp:CreateTimestamped" />
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Name" DisplayName="PelletDelivered" Description="The name of the output sequence carrying pellet delivery notifications." />
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>PelletDelivered</Name>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Name" DisplayName="ResetFeeder" Description="The name of the input sequence used to reset the underground feeder." />
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject" TypeArguments="sys:Object">
        <rx:Name>ResetFeeder</rx:Name>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="3" To="8" Label="Source1" />
      <Edge From="4" To="6" Label="Source1" />
      <Edge From="5" To="6" Label="Source2" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="7" To="8" Label="Source2" />
      <Edge From="8" To="10" Label="Source1" />
      <Edge From="9" To="10" Label="Source2" />
      <Edge From="10" To="14" Label="Source1" />
      <Edge From="11" To="12" Label="Source1" />
      <Edge From="12" To="13" Label="Source1" />
      <Edge From="13" To="14" Label="Source2" />
      <Edge From="13" To="16" Label="Source2" />
      <Edge From="14" To="15" Label="Source1" />
      <Edge From="15" To="16" Label="Source1" />
      <Edge From="16" To="17" Label="Source1" />
      <Edge From="17" To="19" Label="Source1" />
      <Edge From="18" To="19" Label="Source2" />
      <Edge From="20" To="21" Label="Source1" />
      <Edge From="21" To="22" Label="Source1" />
      <Edge From="22" To="23" Label="Source1" />
      <Edge From="23" To="24" Label="Source1" />
      <Edge From="24" To="26" Label="Source1" />
      <Edge From="25" To="26" Label="Source2" />
      <Edge From="27" To="28" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>