<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.8.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:aeon="clr-namespace:Aeon.Acquisition;assembly=Aeon.Acquisition"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Description>Chunks and logs a timestamped video stream into the base data log.</Description>
  <Workflow>
    <Nodes>
      <Expression xsi:type="WorkflowInput">
        <Name>Source1</Name>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Name" DisplayName="Heartbeats" Description="The source of heartbeat signals used as a timing signal for closing groups." Category="GroupClosing" />
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name />
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>ChunkSize</Name>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="ChunkSize" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="ClosingDuration" Category="GroupClosing" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="aeon:GroupByTime">
          <aeon:ChunkSize>1</aeon:ChunkSize>
        </Combinator>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Name" DisplayName="LogName" Description="The base name of the video log, without extension." />
        <Property Name="FrameRate" />
      </Expression>
      <Expression xsi:type="rx:CreateObservable">
        <Name>LogVideo</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>Data</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Data</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Data</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Key</Selector>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Name" />
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="Aeon.Acquisition:FormatFileName.bonsai">
              <Name>VideoData</Name>
              <Extension>csv</Extension>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="FileName" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="io:CsvWriter">
              <io:Append>false</io:Append>
              <io:Overwrite>false</io:Overwrite>
              <io:Suffix>None</io:Suffix>
              <io:IncludeHeader>true</io:IncludeHeader>
              <io:Selector>Seconds,Value.ChunkData.FrameID,Value.ChunkData.Timestamp</io:Selector>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Value.Image</Selector>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Data</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Key</Selector>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="Aeon.Acquisition:FormatFileName.bonsai">
              <Name>VideoData</Name>
              <Extension>avi</Extension>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="FileName" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="FrameRate" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:VideoWriter">
                <cv:Suffix>None</cv:Suffix>
                <cv:Buffered>true</cv:Buffered>
                <cv:Overwrite>false</cv:Overwrite>
                <cv:FourCC>FMP4</cv:FourCC>
                <cv:FrameRate>50</cv:FrameRate>
                <cv:FrameSize>
                  <cv:Width>0</cv:Width>
                  <cv:Height>0</cv:Height>
                </cv:FrameSize>
                <cv:ResizeInterpolation>NearestNeighbor</cv:ResizeInterpolation>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="9" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="7" Label="Source1" />
            <Edge From="6" To="7" Label="Source2" />
            <Edge From="6" To="13" Label="Source2" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source2" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="16" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="14" To="16" Label="Source2" />
            <Edge From="15" To="16" Label="Source3" />
            <Edge From="16" To="17" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Switch" />
      </Expression>
      <Expression xsi:type="WorkflowOutput" />
    </Nodes>
    <Edges>
      <Edge From="0" To="6" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="6" Label="Source2" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="4" To="6" Label="Source3" />
      <Edge From="5" To="6" Label="Source4" />
      <Edge From="6" To="8" Label="Source1" />
      <Edge From="7" To="8" Label="Source2" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>