<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.6.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:harp="clr-namespace:Bonsai.Harp;assembly=Bonsai.Harp"
                 xmlns:dsp="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:scr="clr-namespace:Bonsai.Scripting;assembly=Bonsai.Scripting"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Description>Computes cumulative time spent operating the wheel.</Description>
  <Workflow>
    <Nodes>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Name" DisplayName="Patch" />
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Patch1</Name>
      </Expression>
      <Expression xsi:type="harp:Parse">
        <harp:Type>Timestamp</harp:Type>
        <harp:IsArray>false</harp:IsArray>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:Difference">
          <dsp:Order>1</dsp:Order>
        </Combinator>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Name" DisplayName="WheelPatch" />
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>WheelPatch1</Name>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="Extensions\RelativeWheelPosition.bonsai" />
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Threshold" />
        <Property Name="LowPass" />
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="Extensions\WheelMovement.bonsai">
        <Threshold>0.0005</Threshold>
        <LowPass>5</LowPass>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:DistinctUntilChanged" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Throttle">
          <rx:DueTime>PT0.05S</rx:DueTime>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:WithLatestFrom" />
      </Expression>
      <Expression xsi:type="scr:ExpressionTransform">
        <scr:Expression>Item2 ? Item1 : 0</scr:Expression>
      </Expression>
      <Expression xsi:type="rx:Accumulate" />
      <Expression xsi:type="WorkflowOutput" />
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="3" To="11" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="8" Label="Source1" />
      <Edge From="7" To="8" Label="Source2" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="10" To="11" Label="Source2" />
      <Edge From="11" To="12" Label="Source1" />
      <Edge From="12" To="13" Label="Source1" />
      <Edge From="13" To="14" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>