<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.6.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:sys="clr-namespace:System;assembly=mscorlib"
                 xmlns:p1="clr-namespace:Bonsai.Harp.Expander;assembly=Bonsai.Harp.Expander"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:harp="clr-namespace:Bonsai.Harp;assembly=Bonsai.Harp"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Description>Supplies synchronized camera triggering for both global and local views.</Description>
  <Workflow>
    <Nodes>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="PortName" />
      </Expression>
      <Expression xsi:type="BehaviorSubject" TypeArguments="sys:Object">
        <Name>StartCameras</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:PwmOutput">
          <p1:Command>Start</p1:Command>
          <p1:Mask>Pwm1 Pwm2</p1:Mask>
        </Combinator>
      </Expression>
      <Expression xsi:type="BehaviorSubject" TypeArguments="sys:Object">
        <Name>StopCameras</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:PwmOutput">
          <p1:Command>Stop</p1:Command>
          <p1:Mask>Pwm1 Pwm2</p1:Mask>
        </Combinator>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>LocalTriggerFrequency</Name>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="Frequency" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:ConfigurePwm">
          <p1:Mask>PwmOutput7</p1:Mask>
          <p1:Frequency>125</p1:Frequency>
          <p1:DutyCycle>50</p1:DutyCycle>
          <p1:Count>0</p1:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>GlobalTriggerFrequency</Name>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="Frequency" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:ConfigurePwm">
          <p1:Mask>PwmOutput9</p1:Mask>
          <p1:Frequency>50</p1:Frequency>
          <p1:DutyCycle>50</p1:DutyCycle>
          <p1:Count>0</p1:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Merge" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:OutputExpander">
          <p1:PortName>COM3</p1:PortName>
        </Combinator>
      </Expression>
      <Expression xsi:type="PublishSubject">
        <Name>VideoEvents</Name>
      </Expression>
      <Expression xsi:type="WorkflowOutput" />
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="harp:FilterMessage">
          <harp:Address>68</harp:Address>
          <harp:MessageType>Event</harp:MessageType>
        </Combinator>
      </Expression>
      <Expression xsi:type="Condition">
        <Name>Pwm1</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>MessageBytes</Selector>
            </Expression>
            <Expression xsi:type="Index">
              <Operand xsi:type="IntProperty">
                <Value>11</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="BitwiseAnd">
              <Operand xsi:type="WorkflowProperty" TypeArguments="sys:Byte">
                <Value>2</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="NotEqual">
              <Operand xsi:type="WorkflowProperty" TypeArguments="sys:Byte">
                <Value>0</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="PublishSubject">
        <Name>GlobalTrigger</Name>
      </Expression>
      <Expression xsi:type="Condition">
        <Name>Pwm2</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>MessageBytes</Selector>
            </Expression>
            <Expression xsi:type="Index">
              <Operand xsi:type="IntProperty">
                <Value>11</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="BitwiseAnd">
              <Operand xsi:type="WorkflowProperty" TypeArguments="sys:Byte">
                <Value>4</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="NotEqual">
              <Operand xsi:type="WorkflowProperty" TypeArguments="sys:Byte">
                <Value>0</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="PublishSubject">
        <Name>LocalTrigger</Name>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Value" DisplayName="GlobalTriggerFrequency" Description="The frequency at which to trigger global cameras." />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="DoubleProperty">
          <Value>50</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Take">
          <rx:Count>1</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="BehaviorSubject">
        <Name>GlobalTriggerFrequency</Name>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Value" DisplayName="LocalTriggerFrequency" Description="The frequency at which to trigger the fast local cameras." />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="DoubleProperty">
          <Value>125</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Take">
          <rx:Count>1</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="BehaviorSubject">
        <Name>LocalTriggerFrequency</Name>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="12" Label="Source2" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="11" Label="Source3" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="4" To="11" Label="Source4" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="7" To="11" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="10" To="11" Label="Source2" />
      <Edge From="11" To="12" Label="Source1" />
      <Edge From="12" To="13" Label="Source1" />
      <Edge From="13" To="14" Label="Source1" />
      <Edge From="13" To="15" Label="Source1" />
      <Edge From="15" To="16" Label="Source1" />
      <Edge From="15" To="18" Label="Source1" />
      <Edge From="16" To="17" Label="Source1" />
      <Edge From="18" To="19" Label="Source1" />
      <Edge From="20" To="21" Label="Source1" />
      <Edge From="21" To="22" Label="Source1" />
      <Edge From="22" To="23" Label="Source1" />
      <Edge From="24" To="25" Label="Source1" />
      <Edge From="25" To="26" Label="Source1" />
      <Edge From="26" To="27" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>